s:Sc/PhaseSpaceAtVacFilm/Quantity = "PhaseSpace"
s:Sc/PhaseSpaceAtVacFilm/Surface = "ZPhaseSpaceVol/ZMinusSurface"
b:Sc/PhaseSpaceAtVacFilm/OutputToConsole = "True"
s:Sc/PhaseSpaceAtVacFilm/OutputType = "Binary"
s:Sc/PhaseSpaceAtVacFilm/OutputFile = ""
b:Sc/PhaseSpaceAtVacFilm/IncludeTOPASTime = "False"
b:Sc/PhaseSpaceAtVacFilm/IncludeTimeOfFlight = "False"
b:Sc/PhaseSpaceAtVacFilm/IncludeRunID   = "False"
b:Sc/PhaseSpaceAtVacFilm/IncludeEventID = "False"
b:Sc/PhaseSpaceAtVacFilm/IncludeTrackID = "False"
b:Sc/PhaseSpaceAtVacFilm/IncludeParentID = "False"
b:Sc/PhaseSpaceAtVacFilm/IncludeVertexInfo = "True"
b:Sc/PhaseSpaceAtVacFilm/IncludeSeed = "False"
sv:Sc/PhaseSpaceAtVacFilm/OnlyIncludeParticlesNamed = 2 "proton" "neutron"
s:Sc/PhaseSpaceAtVacFilm/IfOutputFileAlreadyExists = "Increment"
