s:Sc/PhaseSpaceOutput/Quantity = "PhaseSpace"
s:Sc/PhaseSpaceOutput/Surface = "PhaseSpaceVol/ZMinusSurface"
b:Sc/PhaseSpaceOutput/OutputToConsole = "True"
s:Sc/PhaseSpaceOutput/OutputType = "Binary"
s:Sc/PhaseSpaceOutput/OutputFile = ""
b:Sc/PhaseSpaceOutput/IncludeTOPASTime = "False"
b:Sc/PhaseSpaceOutput/IncludeTimeOfFlight = "False"
b:Sc/PhaseSpaceOutput/IncludeRunID   = "False"
b:Sc/PhaseSpaceOutput/IncludeEventID = "False"
b:Sc/PhaseSpaceOutput/IncludeTrackID = "False"
b:Sc/PhaseSpaceOutput/IncludeParentID = "False"
b:Sc/PhaseSpaceOutput/IncludeVertexInfo = "True"
b:Sc/PhaseSpaceOutput/IncludeSeed = "False"
sv:Sc/PhaseSpaceOutput/OnlyIncludeParticlesNamed = 2 "proton" "neutron"
s:Sc/PhaseSpaceOutput/IfOutputFileAlreadyExists = "Increment"
