s:Ge/Scatterer/Hole/Type = "Group"
s:Ge/Scatterer/Hole/Parent = "Scatterer/Holder"
d:Ge/Scatterer/Hole/TransX = 0.0 cm
d:Ge/Scatterer/Hole/TransY = 13.0 cm
d:Ge/Scatterer/Hole/TransZ = 0.0 cm
d:Ge/Scatterer/Hole/RotX = 0.0 deg
d:Ge/Scatterer/Hole/RotY = 0.0 deg
d:Ge/Scatterer/Hole/RotZ = 0.0 deg

s:Ge/Scatterer/S/Parent	= "Scatterer/Hole"
s:Ge/Scatterer/S/Type	= "TsCylinder"
s:Ge/Scatterer/S/Material	= "World"
d:Ge/Scatterer/S/RMin	= 0.0 cm
d:Ge/Scatterer/S/RMax	= 0.0 cm
d:Ge/Scatterer/S/HL	= 0.0 cm
d:Ge/Scatterer/S/TransX = 0.0 cm
d:Ge/Scatterer/S/TransY = 0.0 cm
d:Ge/Scatterer/S/TransZ = 0.0 cm
d:Ge/Scatterer/S/RotX = 0.0 deg
d:Ge/Scatterer/S/RotY = 0.0 deg
d:Ge/Scatterer/S/RotZ = 0.0 deg
d:Ge/Scatterer/S/SPhi = 0.0 deg
d:Ge/Scatterer/S/DPhi = 360.0 deg

s:Ge/Scatterer/S/LexanPolycone/Parent = "Scatterer/S"
s:Ge/Scatterer/S/LexanPolycone/Type = "G4HPolycone"
s:Ge/Scatterer/S/LexanPolycone/Material = "Lexan"
dv:Ge/Scatterer/S/LexanPolycone/RInner = 1 0.0 mm
dv:Ge/Scatterer/S/LexanPolycone/ROuter = 1 0.0 mm
dv:Ge/Scatterer/S/LexanPolycone/Z = 1 0.0 mm
d:Ge/Scatterer/S/LexanPolycone/TransX = 0.0 cm
d:Ge/Scatterer/S/LexanPolycone/TransY = 0.0 cm
d:Ge/Scatterer/S/LexanPolycone/TransZ = 0.0 cm
d:Ge/Scatterer/S/LexanPolycone/RotX = 0.0 deg
d:Ge/Scatterer/S/LexanPolycone/RotY = 0.0 deg
d:Ge/Scatterer/S/LexanPolycone/RotZ = 0.0 deg
d:Ge/Scatterer/S/LexanPolycone/PhiStart = 0.0 deg
d:Ge/Scatterer/S/LexanPolycone/PhiTotal = 360.0 deg

s:Ge/Scatterer/S/LeadPolycone/Parent = "Scatterer/S"
s:Ge/Scatterer/S/LeadPolycone/Type = "G4HPolycone"
s:Ge/Scatterer/S/LeadPolycone/Material = "Lead"
dv:Ge/Scatterer/S/LeadPolycone/RInner = 1 0.0 mm
dv:Ge/Scatterer/S/LeadPolycone/ROuter = 1 0.0 mm
dv:Ge/Scatterer/S/LeadPolycone/Z = 1 0.0 mm
d:Ge/Scatterer/S/LeadPolycone/TransX = 0.0 cm
d:Ge/Scatterer/S/LeadPolycone/TransY = 0.0 cm
d:Ge/Scatterer/S/LeadPolycone/TransZ = 0.0 cm
d:Ge/Scatterer/S/LeadPolycone/RotX = 0.0 deg
d:Ge/Scatterer/S/LeadPolycone/RotY = 0.0 deg
d:Ge/Scatterer/S/LeadPolycone/RotZ = 0.0 deg
d:Ge/Scatterer/S/LeadPolycone/PhiStart = 0.0 deg
d:Ge/Scatterer/S/LeadPolycone/PhiTotal = 360.0 deg
