s:Ge/Snout/Aperture/Type = "TsAperture"
s:Ge/Snout/Aperture/Parent = "Snout"
s:Ge/Snout/Aperture/InputFile = ""
s:Ge/Snout/Aperture/FileFormat = "XYCoordinates"
b:Ge/Snout/Aperture/PrintPoints = "True"
s:Ge/Snout/Aperture/Material = "Brass"
d:Ge/Snout/Aperture/RMax = 0.0 cm
d:Ge/Snout/Aperture/HL = 0.0 cm
d:Ge/Snout/Aperture/TransX = 0.0 cm
d:Ge/Snout/Aperture/TransY = 0.0 cm
d:Ge/Snout/Aperture/TransZ = 0.0 cm
d:Ge/Snout/Aperture/RotX = 0.0 deg
d:Ge/Snout/Aperture/RotY = 0.0 deg
d:Ge/Snout/Aperture/RotZ = 0.0 deg
d:Ge/Snout/Aperture/LowerEdge = 0.0 cm
s:Ge/Snout/Aperture/Message = "ConstructingAperture"
b:Ge/Snout/Aperture/Invisible = "True"
b:Ge/Snout/Aperture/IsParallel = "True"
